PsychoPy2experiment version="2020.2.3"
Settings
  Experiment info = {'participant': '', 'age': '', 'gender': "['F', 'M']", 'handedness': "['R', 'L']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = Hybrid_Search_Task
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Routines
  Routine inAllStim
    CodeComponent readStim
      Code Type = Auto->JS
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      Begin Routine:
        if stimulus not in oldList:
            if (stimSubCate not in oldTargSubList) and (subCount < setsize):
                if stimCount == 0:
                    targetList = targetList + [stimulus]
                    targetDict[str(targKey)] = stimulus
                    subCateT[str(targKey)] = subCate
                    oldList = oldList + [stimulus]
                    test1Dict[str(targKey)] = stimulus
                    test2Dict[str(targKey)] = stimulus
                    test3Dict[str(targKey)] = stimulus
                    targKey = targKey + 1
                    stimCount = stimCount + 1
                elif stimCount == 1:
                    test1Dict[str(test1Key)] = stimulus
                    oldList = oldList + [stimulus]
                    test1Key = test1Key + 1
                    stimCount = stimCount + 1
                elif stimCount == 2:
                    test2Dict[str(test2Key)] = stimulus
                    oldList = oldList + [stimulus]
                    test2Key = test2Key + 1
                    stimCount = stimCount + 1
                elif stimCount == 3:
                    test3Dict[str(test3Key)] = stimulus
                    oldList = oldList + [stimulus]
                    test3Key = test3Key + 1
                    stimCount = stimCount + 1

            elif (stimulus not in oldList) and (stimSubCate not in oldSubList) \
            and (stimDcount < 24):
                if (setsize == 1) or (setsize == 2) or (setsize == 4):
                    if stimCount == 0:
                        targDistrDictAll[str(tdAllCount)] = stimulus
                        subCateTD[str(tdAllCount)] = subCate
                        tdAllCount = tdAllCount + 1
                        stimCount = stimCount + 1
                        stimDcount = stimDcount + 1
                elif setsize == 8:
                    if stimDcount < 4:
                        if (stimCount == 0) or (stimCount == 1):
                            targDistrDictAll[str(tdAllCount)] = stimulus
                            subCateTD[str(tdAllCount)] = subCate
                            tdAllCount = tdAllCount + 1
                            stimCount = stimCount + 1
                            stimDcount = stimDcount + 1
                    else:
                        if stimCount == 0:
                            targDistrDictAll[str(tdAllCount)] = stimulus
                            subCateTD[str(tdAllCount)] = subCate
                            tdAllCount = tdAllCount + 1
                            stimCount = stimCount + 1
                            stimDcount = stimDcount + 1
                elif setsize == 16:
                    if stimDcount < 20:
                        if (stimCount == 0) or (stimCount == 1):
                            targDistrDictAll[str(tdAllCount)] = stimulus
                            subCateTD[str(tdAllCount)] = subCate
                            tdAllCount = tdAllCount + 1
                            stimCount = stimCount + 1
                            stimDcount = stimDcount + 1
                    else:
                        if stimCount == 0:
                            targDistrDictAll[str(tdAllCount)] = stimulus
                            subCateTD[str(tdAllCount)] = subCate
                            tdAllCount = tdAllCount + 1
                            stimCount = stimCount + 1
                            stimDcount = stimDcount + 1
  Routine subCountBegin
    CodeComponent subBegin
      Code Type = Auto->JS
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      Begin Routine:
        cateTag = stimCate
        if cateTag == "Animals":
            altCateTag = "Objects"
        else:
            altCateTag = "Animals"

        oldTargSubList = []
        oldSubList = []
        targetList = []
        targetDict = {}
        targDistrDictAll = {}
        altDistrDictAll = {}
        test1Dict = {}
        test2Dict = {}
        test3Dict = {}
        searchDict = {}
        searchCate = {}
        searchSubCate = {}
        subCateT = {}
        subCateTD = {}
        subCateD = {}

        subCount = 0
        stimDcount = 0
        targKey = 0
        tdAllCount = 0
        dAllCount = 0
        test1Key = setsize
        test2Key = setsize
        test3Key = setsize
  Routine stimCountBegin
    CodeComponent stimBegin
      Code Type = Auto->JS
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      Begin Routine:
        stimCount = 0
  Routine subCountPlus
    CodeComponent subPlus
      Code Type = Auto->JS
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      End Routine:
        if (stimSubCate not in oldTargSubList) and (subCount < setsize):
            oldTargSubList = oldTargSubList + [stimSubCate]
            subCount = subCount + 1
        elif (stimSubCate not in oldSubList) and (stimDcount < 24) and \
        (subCount >= setsize):
            oldSubList = oldSubList + [stimSubCate]
  Routine listMerge
    CodeComponent mergeCode
      Code Type = Auto->JS
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      Begin Routine:
        schCount = 48

        if setsize == 1:
            for schLoop in range(12):
                searchDict[str(schCount)] = targetDict["0"]
                searchCate[str(schCount)] = cateTag
                searchSubCate[str(schCount)] = subCateT["0"]
                schCount = schCount + 1

        elif setsize == 2:
            for schLoop in range(0, 6):
                searchDict[str(schCount)] = targetDict["0"]
                searchCate[str(schCount)] = cateTag
                searchSubCate[str(schCount)] = subCateT["0"]
                schCount = schCount + 1
            for schLoop in range(6, 12):
                searchDict[str(schCount)] = targetDict["1"]
                searchCate[str(schCount)] = cateTag
                searchSubCate[str(schCount)] = subCateT["1"]
                schCount = schCount + 1

        elif setsize == 4:
            for schLoop in range(3):
                searchDict[str(schCount)] = targetDict["0"]
                searchCate[str(schCount)] = cateTag
                searchSubCate[str(schCount)] = subCateT["0"]
                schCount = schCount + 1
            for schLoop in range(3, 6):
                searchDict[str(schCount)] = targetDict["1"]
                searchCate[str(schCount)] = cateTag
                searchSubCate[str(schCount)] = subCateT["1"]
                schCount = schCount + 1
            for schLoop in range(6, 9):
                searchDict[str(schCount)] = targetDict["2"]
                searchCate[str(schCount)] = cateTag
                searchSubCate[str(schCount)] = subCateT["2"]
                schCount = schCount + 1
            for schLoop in range(9, 12):
                searchDict[str(schCount)] = targetDict["3"]
                searchCate[str(schCount)] = cateTag
                searchSubCate[str(schCount)] = subCateT["3"]
                schCount = schCount + 1

        elif setsize == 8:
            for sizeloop in range(8):
                searchDict[str(schCount)] = targetDict[str(sizeloop)]
                searchCate[str(schCount)] = cateTag
                searchSubCate[str(schCount)] = subCateT[str(sizeloop)]
                schCount = schCount + 1
            for sizeloop in range(4):
                searchDict[str(schCount)] = targetDict[str(sizeloop)]
                searchCate[str(schCount)] = cateTag
                searchSubCate[str(schCount)] = subCateT[str(sizeloop)]
                schCount = schCount + 1

        elif setsize == 16:
            for sizeloop in range(12):
                searchDict[str(schCount)] = targetDict[str(sizeloop)]
                searchCate[str(schCount)] = cateTag
                searchSubCate[str(schCount)] = subCateT[str(sizeloop)]
                schCount = schCount + 1

        ACClist = {}
        TBRcount = 0
        endExpTag = 0
        stLoopCtrl = 1
        thLoopCtrl = 1
        testLoopCtrl = 1
        memoText = "Memorizing"
        testDict = test1Dict
        testText= "Testing 1"
        schPresenLoop = 1
        ACCschSum = 0
        ACCrejSum = 0

        testLoopNum = testOrd
  Routine preExp
    CodeComponent prePars
      Code Type = Auto->JS
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      Begin Routine:
        distrN = 24
        targetN = 12
        trialN = 60
        oldList = []
        #oldTargSubList = []
  Routine distrCtrl
    CodeComponent distrCtrlCode
      Code Type = Auto->JS
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      Begin Routine:
        dAllCount = 0
  Routine distrCountBegin
    CodeComponent distrBegin
      Code Type = Auto->JS
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      Begin Routine:
        distrCount = 0
        altDistrCount = 24
  Routine studyHint
    TextComponent stHint
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $memoText
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    TextComponent stFix
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 0.8
      text = +
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  Routine TBRLoopCtrl
    CodeComponent studyLoopCode
      Code Type = Auto->JS
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      Begin Routine:
        studyCount = 0
        ACCsum = 0
        ACCrejSum = 0
        flag = 0
  Routine testTrials
    CodeComponent inTestImg
      Code Type = Auto->JS
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      Begin Routine:
        testN = str(testIndx)
        if testDict[testN] in targetList:
            testAns = "z"
        else:
            testAns = "m"
    ImageComponent testImg
      image [set every repeat] = $testDict[testN]
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent testResp
      allowedKeys = 'z','m'
      correctAns = $testAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent testCountPlus
      Code Type = Auto->JS
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      End Routine:
        if testResp.corr == 1:
            fbkText = "Correct!"
            clr = "green"
        else:
            fbkText = "Wrong!"
            clr = "red"

        ACCsum = ACCsum + testResp.corr
        test_loop.addData("testsize", setsize)
        test_loop.addData("condTest", cateTag)
  Routine studyTrials
    CodeComponent inStimImg
      Code Type = Auto->JS
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      Begin Routine:
        studyN = str(studyCount)
    ImageComponent studyImg
      image [set every repeat] = $targetDict[studyN]
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent studyITI
      image = Instructions/ITI.png
      size = (1.6, 1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.95
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    CodeComponent studyCountPlus
      Code Type = Auto->JS
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      End Routine:
        studyCount = studyCount + 1
  Routine testHint
    TextComponent ttHint
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $testText
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    TextComponent ttFix
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 0.8
      text [set every repeat] = +
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  Routine test_iti
    TextComponent fbkTest
      color [set every repeat] = $clr
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $fbkText
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    ImageComponent testITI
      image = Instructions/ITI.png
      size = (1.6, 1)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.5
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  Routine expEND
    TextComponent expENDtest
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your accuracy is too low, so we have to finish the experiment.
        Please enter Esc to exit full screen mode and then close the browser.
        Thank you for your participation.
        Have a good day.
  Routine TBRcountPlus
    CodeComponent TBRplus
      Code Type = Auto->JS
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      Begin Routine:
        ACClist[str(TBRcount)] = ACCsum/(setsize*2)
        TBRcount = TBRcount + 1

        if TBRcount == 1:
            if ACClist["0"] >= 0.8:
                endExpTag = 0
                stLoopCtrl = 0
                thLoopCtrl = 1
                testLoopCtrl = 1
                testDict = test2Dict
                testText = "Testing 2"
            elif ACClist["0"] < 0.8:
                endExpTag = 0
                stLoopCtrl = 1
                thLoopCtrl = 1
                testLoopCtrl = 1
                memoText = "Re-Memorizing"
                testDict = test1Dict
                testText = "Testing 1"

        elif TBRcount >= 2 and ACClist["0"] >= 0.8 and ACClist["1"] >= 0.8:
                endExpTag = 0
                stLoopCtrl = 0
                thLoopCtrl = 0
                testLoopCtrl = 0
                flag = 1

        elif TBRcount == 2:
            if ACClist["0"] >= 0.8 and ACClist["1"] < 0.8:
                endExpTag = 0
                stLoopCtrl = 1
                thLoopCtrl = 1
                testLoopCtrl = 1
                memoText = "Re-Memorizing"
                testDict = test2Dict
                testText = "Testing 2"
            elif ACClist["0"] < 0.8 and ACClist["1"] >= 0.8:
                endExpTag = 0
                stLoopCtrl = 0
                thLoopCtrl = 1
                testLoopCtrl = 1
                testDict = test2Dict
                testText = "Testing 2"
                print(stLoopCtrl)
            elif ACClist["0"] < 0.8 and ACClist["1"] < 0.8:
                endExpTag = 0
                stLoopCtrl = 1
                thLoopCtrl = 1
                testLoopCtrl = 1
                memoText = "Re-Memorizing"
                testDict = test1Dict
                testText = "Testing 1"

        elif TBRcount == 3:
            if (ACClist["0"] >= 0.8 and ACClist["1"] < 0.8 and ACClist["2"] < 0.8) \
            or (ACClist["0"] < 0.8 and ACClist["1"] >= 0.8 and ACClist["2"] < 0.8):
                endExpTag = 0
                stLoopCtrl = 1
                thLoopCtrl = 1
                testLoopCtrl = 1
                testDict = test2Dict
                testText = "Testing 2"
            elif ACClist["0"] < 0.8 and ACClist["1"] < 0.8 and ACClist["2"] >= 0.8:
                endExpTag = 0
                stLoopCtrl = 0
                thLoopCtrl = 1
                testLoopCtrl = 1
                testDict = test2Dict
                testText= "Testing 2"
            elif (ACClist["0"] < 0.8 and ACClist["1"] >= 0.8 and ACClist["2"] >= 0.8) \
            or (ACClist["0"] >= 0.8 and ACClist["1"] < 0.8 and ACClist["2"] >= 0.8):
                endExpTag = 0
                stLoopCtrl = 0
                thLoopCtrl = 1
                testLoopCtrl = 1
                testDict = test3Dict
                testText= "Testing 3"
            elif ACClist["0"] < 0.8 and ACClist["1"] < 0.8 and ACClist["2"] < 0.8:
                endExpTag = 1
                stLoopCtrl = 0
                thLoopCtrl = 0
                testLoopCtrl = 0
                schPresenLoop = 0

        elif (TBRcount >= 4) and ((ACClist["0"] < 0.8 and ACClist["1"] >= 0.8 and \
        ACClist["2"] >= 0.8 and ACClist["3"] >= 0.8) or (ACClist["0"] >= 0.8 and \
        ACClist["1"] < 0.8 and ACClist["2"] >= 0.8 and ACClist["3"] >= 0.8)):
                endExpTag = 0
                stLoopCtrl = 0
                thLoopCtrl = 0
                testLoopCtrl = 0
                flag = 1

        elif TBRcount == 4:
            if (ACClist["0"] < 0.8 and ACClist["1"] < 0.8 and ACClist["2"] >= 0.8 and \
            ACClist["3"] >= 0.8) \
            or (ACClist["0"] >= 0.8 and ACClist["1"] < 0.8 and ACClist["2"] < 0.8 and \
            ACClist["3"] >= 0.8) \
            or (ACClist["0"] < 0.8 and ACClist["1"] >= 0.8 and ACClist["2"] < 0.8 and \
            ACClist["3"] >= 0.8):
                endExpTag = 0
                stLoopCtrl = 0
                thLoopCtrl = 1
                testLoopCtrl = 1
                testDict = test3Dict
                testText= "Testing 3"
            elif (ACClist["0"] < 0.8 and ACClist["1"] >= 0.8 and ACClist["2"] >= 0.8 and \
            ACClist["3"] < 0.8) \
            or (ACClist["0"] > 0.8 and ACClist["1"] < 0.8 and ACClist["2"] >= 0.8 and \
            ACClist["3"] < 0.8):
                endExpTag = 0
                stLoopCtrl = 1
                thLoopCtrl = 1
                testLoopCtrl = 1
                testDict = test3Dict
                testText= 'Testing 3'
            elif (ACClist["0"] >= 0.8 and ACClist["1"] < 0.8 and ACClist["2"] < 0.8 and \
            ACClist["3"] < 0.8) \
            or (ACClist["0"] < 0.8 and ACClist["1"] >= 0.8 and ACClist["2"] < 0.8 and \
            ACClist["3"] < 0.8) \
            or (ACClist["0"] < 0.8 and ACClist["1"] < 0.8 and ACClist["2"] >= 0.8 and \
            ACClist["3"] < 0.8):
                endExpTag = 1
                stLoopCtrl = 0
                thLoopCtrl = 0
                testLoopCtrl = 0
                schPresenLoop = 0

        elif TBRcount == 5 and ACClist["4"] < 0.8:
            endExpTag = 0
            stLoopCtrl = 0
            thLoopCtrl = 0
            testLoopCtrl = 0

        elif TBRcount == 5 and ACClist["4"] >= 0.8:
            endExpTag = 0
            stLoopCtrl = 0
            thLoopCtrl = 0
            testLoopCtrl = 0
  Routine searchHint
    TextComponent schHint
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = Searching
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    TextComponent schFix
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 0.8
      text = +
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  Routine searchTrials
    CodeComponent schIndx
      Code Type = Auto->JS
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      Begin Routine:
        schN = str(trialIndx)

        if searchDict[schN] in targetList:
            schAns = "z"
        else:
            schAns = "m"
    ImageComponent schImg
      image [set every repeat] = $searchDict[schN]
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent schITI
      image = Instructions/ITI.png
      size = (1.6, 1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.8
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    KeyboardComponent schResp
      allowedKeys = 'z','m'
      correctAns = $schAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      store = first key
      storeCorrect = True
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    CodeComponent schCode
      Code Type = Auto->JS
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      End Routine:
        if schResp.corr == 1 and schResp.keys == "z":
            ACCschSum = ACCschSum + 1
        elif schResp.corr == 1 and schResp.keys == "m":
            ACCrejSum = ACCrejSum + 1

        sch_loop.addData("setsize", setsize)
        sch_loop.addData("subCategory", searchSubCate[schN])
        sch_loop.addData("category", searchCate[schN])
        sch_loop.addData("cond", cateTag)
        sch_loop.addData("stimImg", searchDict[schN])
  Routine expStart
    ImageComponent formalExp
      image = Instructions/instr_exp.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent expStaResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pracStart
    TextComponent pStartHint
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = Practice
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    ImageComponent pITI
      image = Instructions/ITI.png
      size = (1.6, 1)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 0.5
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  Routine pStudyTrials
    ImageComponent pStudyImg
      image [set every repeat] = $pTarg
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent pStdITI
      image = Instructions/ITI.png
      size = (1.6, 1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.95
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  Routine pStudyHint
    TextComponent psHint
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $pmemoText
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    TextComponent psFix
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 0.8
      text = +
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  Routine pTBRctrl
    CodeComponent pTBRcode
      Code Type = Auto->JS
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      Begin Routine:
        pmemoText = "Memorizing"
        ptestText = "Testing 1"
        pstLoopCtrl = 1
        pthLoopCtrl = 1
        ptestLoopCtrl = 1
        pTBRcount = 0
        pACClist = {}
  Routine pTestHint
    TextComponent ptHint
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $ptestText
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    TextComponent ptFix
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 0.8
      text = +
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  Routine pTestTrials
    ImageComponent pTestImg
      image [set every repeat] = $ptStim
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent pTestResp
      allowedKeys = 'z','m'
      correctAns = $pCorAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine pACCcount
    CodeComponent jdgLoop
      Code Type = Auto->JS
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      Begin Routine:
        if ptN == 0:
            ptN = 1

        pACClist[str(pTBRcount)] = pACCsum/ptN
        pTBRcount = pTBRcount + 1

        if pTBRcount == 1:
            if pACClist["0"] >= 0.8:
                pendExpTag = 0
                pstLoopCtrl = 0
                pthLoopCtrl = 1
                ptestLoopCtrl = 1
                ptestText = "Testing 2"
            elif pACClist["0"] < 0.8:
                pendExpTag = 0
                pstLoopCtrl = 1
                pthLoopCtrl = 1
                ptestLoopCtrl = 1
                pmemoText = "Re-Memorizing"
                ptestText = "Testing 1"

        elif (pTBRcount >= 2) and (pACClist["0"] >= 0.8) and (pACClist["1"] >= 0.8):
                pendExpTag = 0
                pstLoopCtrl = 0
                pthLoopCtrl = 0
                ptestLoopCtrl = 0

        elif pTBRcount == 2:
            if (pACClist["0"] >= 0.8) and (pACClist["1"] < 0.8):
                pendExpTag = 0
                pstLoopCtrl = 1
                pthLoopCtrl = 1
                ptestLoopCtrl = 1
                pmemoText = "Re-Memorizing"
                ptestText = "Testing 2"
            elif (pACClist["0"] < 0.8) and (pACClist["1"] >= 0.8):
                pendExpTag = 0
                pstLoopCtrl = 0
                pthLoopCtrl = 1
                ptestLoopCtrl = 1
                ptestText = "Testing 2"
            elif (pACClist["0"] < 0.8) and (pACClist["1"] < 0.8):
                pendExpTag = 0
                pstLoopCtrl = 1
                pthLoopCtrl = 1
                ptestLoopCtrl = 1
                pmemoText = "Re-Memorizing"
                ptestText = "Testing 1"

        elif pTBRcount == 3:
            if ((pACClist["0"] >= 0.8) and (pACClist["1"] < 0.8) and \
            (pACClist["2"] < 0.8)) \
            or ((pACClist["0"] < 0.8) and (pACClist["1"] >= 0.8) and \
            (pACClist["2"] < 0.8)):
                pendExpTag = 0
                pstLoopCtrl = 1
                pthLoopCtrl = 1
                ptestLoopCtrl = 1
                ptestText = "Testing 2"
            elif (pACClist["0"] < 0.8) and (pACClist["1"] < 0.8) and \
            (pACClist["2"] >= 0.8):
                pendExpTag = 0
                pstLoopCtrl = 0
                pthLoopCtrl = 1
                ptestLoopCtrl = 1
                ptestText = "Testing 2"
            elif ((pACClist["0"] < 0.8) and (pACClist["1"] >= 0.8) and \
            (pACClist["2"] >= 0.8)) \
            or ((pACClist["0"] >= 0.8) and (pACClist["1"] < 0.8) and \
            (pACClist["2"] >= 0.8)):
                pendExpTag = 0
                pstLoopCtrl = 0
                pthLoopCtrl = 1
                ptestLoopCtrl = 1
                ptestText = "Testing 3"
            elif (pACClist["0"] < 0.8) and (pACClist["1"] < 0.8) and \
            (pACClist["2"] < 0.8):
                pendExpTag = 1
                pstLoopCtrl = 0
                pthLoopCtrl = 0
                ptestLoopCtrl = 0

        elif (pTBRcount >= 4) and ((pACClist["0"] < 0.8 and pACClist["1"] >= 0.8 and \
        pACClist["2"] >= 0.8 and pACClist["3"] >= 0.8) or (pACClist["0"] >= 0.8 and \
        pACClist["1"] < 0.8 and pACClist["2"] >= 0.8 and pACClist["3"] >= 0.8)):
                pendExpTag = 0
                pstLoopCtrl = 0
                pthLoopCtrl = 0
                ptestLoopCtrl = 0

        elif pTBRcount == 4:
            if (pACClist["0"] < 0.8 and pACClist["1"] < 0.8 and \
            pACClist["2"] >= 0.8 and pACClist["3"] >= 0.8) \
            or (pACClist["0"] >= 0.8 and pACClist["1"] < 0.8 and \
            pACClist["2"] < 0.8 and pACClist["3"] >= 0.8) \
            or (pACClist["0"] < 0.8 and pACClist["1"] >= 0.8 and \
            pACClist["2"] < 0.8 and pACClist["3"] >= 0.8):
                pendExpTag = 0
                pstLoopCtrl = 0
                pthLoopCtrl = 1
                ptestLoopCtrl = 1
                ptestText = "Testing 3"
            elif (pACClist["0"] < 0.8 and pACClist["1"] >= 0.8 and \
            pACClist["2"] >= 0.8 and pACClist["3"] < 0.8) \
            or (pACClist["0"] > 0.8 and pACClist["1"] < 0.8 and \
            pACClist["2"] >= 0.8 and pACClist["3"] < 0.8):
                pendExpTag = 0
                pstLoopCtrl = 1
                pthLoopCtrl = 1
                ptestLoopCtrl = 1
                ptestText = "Testing 3"
            elif (pACClist["0"] >= 0.8 and pACClist["1"] < 0.8 and \
            pACClist["2"] < 0.8 and pACClist["3"] < 0.8) \
            or (pACClist["0"] < 0.8 and pACClist["1"] >= 0.8 and \
            pACClist["2"] < 0.8 and pACClist["3"] < 0.8) \
            or (pACClist["0"] < 0.8 and pACClist["1"] < 0.8 and \
            pACClist["2"] >= 0.8 and pACClist["3"] < 0.8):
                pendExpTag = 1
                pstLoopCtrl = 0
                pthLoopCtrl = 0
                ptestLoopCtrl = 0

        elif pTBRcount == 5 and pACClist["4"] < 0.8:
            pendExpTag = 0
            pstLoopCtrl = 0
            pthLoopCtrl = 0
            ptestLoopCtrl = 0

        elif pTBRcount == 5 and pACClist["4"] >= 0.8:
            pendExpTag = 0
            pstLoopCtrl = 0
            pthLoopCtrl = 0
            ptestLoopCtrl = 0
  Routine jdgTestFile
    CodeComponent jdgFileCode
      Code Type = Auto->JS
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      Begin Routine:
        if pTBRcount == 0:
            pTestFile = pTest1
        elif pTBRcount == 1:
            pTestFile = pTest2
        elif pTBRcount == 3:
            pTestFile = pTest3

        pACCsum = 0
        ptN = 0
  Routine pSearchHint
    CodeComponent pACCbegin
      Code Type = Auto->JS
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      Begin Routine:
        pACCschSum = 0
        pACCschSumR = 0
    TextComponent sHint
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = Searching
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    TextComponent sFix
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 0.8
      text = +
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  Routine pSearchTrials
    ImageComponent psImg
      image [set every repeat] = $pStim
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent psITI
      image = Instructions/ITI.png
      size = (1.6, 1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.8
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    KeyboardComponent psResp
      allowedKeys = 'z','m'
      correctAns = $pCorAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    CodeComponent pACCplus
      Code Type = Auto->JS
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      End Routine:
        if (psResp.corr == 1) and (psResp.keys == "z"):
            pACCschSum = pACCschSum + 1
        elif (psResp.corr == 1) and (psResp.keys == "m"):
            pACCschSumR = pACCschSumR + 1
  Routine endHint
    ImageComponent endHintImg
      image = Instructions/endHint.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent endConResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent endHintReset
      Code Type = Auto->JS
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      End Routine:
        endHintTag = 0
  Routine pTextITI
    CodeComponent pjdgACCtest
      Code Type = Auto->JS
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      Begin Routine:
        if pTestResp.corr == 1:
            pfbkText = "Correct!"
            pclr = "green"
        else:
            pfbkText = "Wrong!"
            pclr = "red"
    TextComponent pfbkTest
      color [set every repeat] = $pclr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $pfbkText
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    ImageComponent pTestITI
      image = Instructions/ITI.png
      size = (1.6, 1)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.5
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    CodeComponent ptACCplus
      Code Type = Auto->JS
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      End Routine:
        pACCsum = pACCsum + pTestResp.corr
        ptN = ptN + 1
  Routine inBothDistr
    CodeComponent chooseDistr
      Code Type = Auto->JS
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      Begin Routine:
        searchDict[str(distrCount)] = targDistrDictAll[str(distrIndx)]
        searchCate[str(distrCount)] = cateTag
        searchSubCate[str(distrCount)] = subCateTD[str(distrIndx)]
        oldList = oldList + [targDistrDictAll[str(distrIndx)]]

        searchDict[str(altDistrCount)] = altDistrDictAll[str(distrIndx)]
        searchCate[str(altDistrCount)] = altCateTag
        searchSubCate[str(altDistrCount)] = subCateD[str(distrIndx)]
        oldList = oldList + [altDistrDictAll[str(distrIndx)]]

        distrCount = distrCount + 1
        altDistrCount = altDistrCount + 1
  Routine inAltDistr
    CodeComponent inAltDistrCode
      Code Type = Auto->JS
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      Begin Routine:
        if (stimulus not in oldList) and (stCount == 0) and (dAllCount < 24):
            altDistrDictAll[str(dAllCount)] = stimulus
            subCateD[str(dAllCount)] = subCate
            dAllCount = dAllCount + 1
            stCount = stCount + 1
  Routine altStimCountBegin
    CodeComponent stCountBegin
      Code Type = Auto->JS
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      Begin Routine:
        stCount = 0
  Routine schACCpresen
    CodeComponent ACCresult
      Code Type = Auto->JS
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      Begin Routine:
        ACCsch = (ACCschSum/targetN)*100
        ACCschStr = str(ACCsch)
        ACCstr = ""
        if len(ACCschStr) > 5:
            for aN in range(5):
                ACCstr = ACCstr + ACCschStr[aN]
        else:
            for aN in range(len(ACCschStr)):
                ACCstr = ACCstr + ACCschStr[aN]

        ACCtext1 = "You detected "+ACCstr+"% of the targets"

        ACCschR = (ACCrejSum/(distrN*2))*100
        ACCschStrR = str(ACCschR)
        ACCstrR = ""
        if len(ACCschStrR) > 5:
            for aN in range(5):
                ACCstrR = ACCstrR + ACCschStrR[aN]
        else:
            for aN in range(len(ACCschStrR)):
                ACCstrR = ACCstrR + ACCschStrR[aN]

        ACCtext2 = "You rejected "+ACCstrR+"% of the distractors"
    TextComponent ACCpresen1
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text [set every repeat] = $ACCtext1
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    TextComponent ACCpresen2
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text [set every repeat] = $ACCtext2
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    TextComponent ACCpresen3
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = -----  Break (within 5 min) -----
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    TextComponent ACCpresen4
      color = black
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Please press
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    TextComponent ACCpresen5
      color = red
      letterHeight = 0.06
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = SPACE
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    TextComponent ACCpresen6
      color = black
      letterHeight = 0.05
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = to continue.
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    KeyboardComponent brkResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine pACCpresen
    CodeComponent pACCresult
      Code Type = Auto->JS
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      Begin Routine:
        pACCsch = (pACCschSum/4)*100
        pACCschStr = str(pACCsch)
        pACCstr = ""
        if len(pACCschStr) > 5:
            for paN in range(5):
                pACCstr = pACCstr + pACCschStr[paN]
        else:
            for paN in range(len(pACCschStr)):
                pACCstr = pACCstr + pACCschStr[paN]

        pACCtext1 = "You detected "+pACCstr+"% of the targets"

        pACCschR = (pACCschSumR/16)*100
        pACCschStrR = str(pACCschR)
        pACCstrR = ""
        if len(pACCschStrR) > 5:
            for paNR in range(5):
                pACCstrR = pACCstrR + pACCschStrR[paNR]
        else:
            for paNR in range(len(pACCschStrR)):
                pACCstrR = pACCstrR + pACCschStrR[paNR]

        pACCtext2 = "You rejected "+pACCstrR+"% of the distractors"
    TextComponent pACCpresen1
      color = black
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $pACCtext1
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    TextComponent pACCpresen2
      color = black
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $pACCtext2
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  Routine instr1
    ImageComponent instrImg1
      image [set every repeat] = $instrOrd1
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instrResp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrEnd
    ImageComponent instr10
      image = Instructions/instr10.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instrResp10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrSCHeg
    ImageComponent instrEG
      image = Instructions/s1.jpg
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent egITI
      image = Instructions/ITI.png
      size = (1.6, 1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.3
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    ImageComponent instrAnsHint
      image = Instructions/instrHint1.png
      size = (1.6, 1)
      startVal [time (s)] = 0.5
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    KeyboardComponent instrEGresp
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrHintEnd
    ImageComponent instrHint2
      image = Instructions/instrHint2.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instrHint2Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrInter
    ImageComponent imageITI
      image = Instructions/ITI.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instrHintExp
    ImageComponent instrHint3
      image = Instructions/instrHint3.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instrHint3Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrSCH
    ImageComponent instrImgSCH
      image [set every repeat] = $instrOrd3
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent instrITI
      image = Instructions/ITI.png
      size = (1.6, 1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.8
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    KeyboardComponent instrRespSCH
      allowedKeys = 'z','m'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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  Routine instrEG1
    ImageComponent instrImg5
      image = Instructions/instr5.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instrResp5
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrEG2
    ImageComponent instrImg6
      image = Instructions/instr6.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instrResp6
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr2
    ImageComponent instrImg3
      image [set every repeat] = $instrOrd2
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instrResp3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
    TextComponent gdy
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        All done!
        Your experiment will be completely finished after a few seconds.
        Have a nice day.
Flow
  LoopInitiator instr1_loop loopType="TrialHandler"
    conditionsFile = Instructions\instrP1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instrOrd1', 'Instructions/instr1.png')]),
      OrderedDict([('instrOrd1', 'Instructions/instr2.png')]),
      OrderedDict([('instrOrd1', 'Instructions/instr3.png')]),
      OrderedDict([('instrOrd1', 'Instructions/instr4.png')])]
    Routine instr1
  LoopTerminator instr1_loop
  Routine instrEG1
  Routine instrEG2
  LoopInitiator instr2_loop loopType="TrialHandler"
    conditionsFile = Instructions\instrP2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instrOrd2', 'Instructions/instr7.png')]),
      OrderedDict([('instrOrd2', 'Instructions/instr8.png')]),
      OrderedDict([('instrOrd2', 'Instructions/instr9.png')])]
    Routine instr2
  LoopTerminator instr2_loop
  Routine instrSCHeg
  Routine instrHintEnd
  Routine instrInter
  LoopInitiator instr3_loop loopType="TrialHandler"
    conditionsFile = Instructions\instrP3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('instrOrd2', 'Instructions/instr7.png')]),
      OrderedDict([('instrOrd2', 'Instructions/instr8.png')]),
      OrderedDict([('instrOrd2', 'Instructions/instr9.png')])]
    Routine instrSCH
  LoopTerminator instr3_loop
  Routine instrHintExp
  Routine instrEnd
  Routine pracStart
  LoopInitiator practice_loop loopType="TrialHandler"
    conditions = [OrderedDict([('pStudyOrd', 'Practice/pStudy2.xlsx'), ('pTest1', 'Practice/pTest2_1.xlsx'), ('pTest2', 'Practice/pTest2_2.xlsx'), ('pTest3', 'Practice/pTest2_3.xlsx'), ('pSearch', 'Practice/pSearch2.xlsx')])]
    conditionsFile = Practice\pstList.xlsx
    loopType = random
    nReps = 1
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    Routine pTBRctrl
    LoopInitiator pTBR_loop loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine jdgTestFile
      LoopInitiator psPresen_loop loopType="TrialHandler"
        loopType = random
        nReps = pstLoopCtrl
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        Routine pStudyHint
        LoopInitiator pStudy_loop loopType="TrialHandler"
          conditionsFile = $pStudyOrd
          loopType = random
          nReps = 1
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          Routine pStudyTrials
        LoopTerminator pStudy_loop
      LoopTerminator psPresen_loop
      LoopInitiator ptHint_loop loopType="TrialHandler"
        loopType = random
        nReps = pthLoopCtrl 
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        Routine pTestHint
      LoopTerminator ptHint_loop
      LoopInitiator pTest_loop loopType="TrialHandler"
        conditionsFile = $pTestFile
        loopType = random
        nReps = ptestLoopCtrl
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        Routine pTestTrials
        Routine pTextITI
      LoopTerminator pTest_loop
      Routine pACCcount
      LoopInitiator endHint_loop loopType="TrialHandler"
        loopType = random
        nReps = pendExpTag
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        Routine endHint
      LoopTerminator endHint_loop
    LoopTerminator pTBR_loop
    Routine pSearchHint
    LoopInitiator pSearch_loop loopType="TrialHandler"
      conditionsFile = $pSearch
      loopType = random
      nReps = 1
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      Routine pSearchTrials
    LoopTerminator pSearch_loop
    Routine pACCpresen
  LoopTerminator practice_loop
  Routine expStart
  Routine preExp
  LoopInitiator blockOrd loopType="TrialHandler"
    conditionsFile = StimList\setOrdObj.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimCateList', 'StimList/objCate.xls'), ('setsize', 1), ('stimCate', 'Objects'), ('testOrd', 'StimList/testOrd1.xlsx')]),
      OrderedDict([('stimCateList', 'StimList/objCate.xls'), ('setsize', 2), ('stimCate', 'Objects'), ('testOrd', 'StimList/testOrd2.xlsx')]),
      OrderedDict([('stimCateList', 'StimList/objCate.xls'), ('setsize', 4), ('stimCate', 'Objects'), ('testOrd', 'StimList/testOrd4.xlsx')]),
      OrderedDict([('stimCateList', 'StimList/objCate.xls'), ('setsize', 8), ('stimCate', 'Objects'), ('testOrd', 'StimList/testOrd8.xlsx')]),
      OrderedDict([('stimCateList', 'StimList/objCate.xls'), ('setsize', 16), ('stimCate', 'Objects'), ('testOrd', 'StimList/testOrd16.xlsx')])]
    Routine subCountBegin
    LoopInitiator sub30_loop loopType="TrialHandler"
      conditionsFile = $stimCateList
      loopType = random
      nReps = 1
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      Routine stimCountBegin
      LoopInitiator stim17_loop loopType="TrialHandler"
        conditionsFile = $stimSubCate
        loopType = random
        nReps = 1
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        Routine inAllStim
      LoopTerminator stim17_loop
      Routine subCountPlus
    LoopTerminator sub30_loop
    Routine distrCtrl
    LoopInitiator distr_loop loopType="TrialHandler"
      conditionsFile = StimList\animCate.xls
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('stimSubCate', 'StimList/beast.xls')]),
        OrderedDict([('stimSubCate', 'StimList/bird.xls')]),
        OrderedDict([('stimSubCate', 'StimList/butterfly.xls')]),
        OrderedDict([('stimSubCate', 'StimList/cat.xls')]),
        OrderedDict([('stimSubCate', 'StimList/cow.xls')]),
        OrderedDict([('stimSubCate', 'StimList/crustacea.xls')]),
        OrderedDict([('stimSubCate', 'StimList/deer.xls')]),
        OrderedDict([('stimSubCate', 'StimList/dog.xls')]),
        OrderedDict([('stimSubCate', 'StimList/dragonfly.xls')]),
        OrderedDict([('stimSubCate', 'StimList/fish.xls')]),
        OrderedDict([('stimSubCate', 'StimList/frog.xls')]),
        OrderedDict([('stimSubCate', 'StimList/hoofed.xls')]),
        OrderedDict([('stimSubCate', 'StimList/horse.xls')]),
        OrderedDict([('stimSubCate', 'StimList/insect.xls')]),
        OrderedDict([('stimSubCate', 'StimList/marine.xls')]),
        OrderedDict([('stimSubCate', 'StimList/marsupialia_australia.xls')]),
        OrderedDict([('stimSubCate', 'StimList/mustelidae.xls')]),
        OrderedDict([('stimSubCate', 'StimList/panthera.xls')]),
        OrderedDict([('stimSubCate', 'StimList/poultry.xls')]),
        OrderedDict([('stimSubCate', 'StimList/primate.xls')]),
        OrderedDict([('stimSubCate', 'StimList/procyon_civet.xls')]),
        OrderedDict([('stimSubCate', 'StimList/rabbit.xls')]),
        OrderedDict([('stimSubCate', 'StimList/rat.xls')]),
        OrderedDict([('stimSubCate', 'StimList/reptile.xls')]),
        OrderedDict([('stimSubCate', 'StimList/seashell.xls')]),
        OrderedDict([('stimSubCate', 'StimList/sheep_alpaca.xls')]),
        OrderedDict([('stimSubCate', 'StimList/spider.xls')])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
      Routine altStimCountBegin
      LoopInitiator altDistrStim_loop loopType="TrialHandler"
        conditionsFile = $stimSubCate
        loopType = random
        nReps = 1
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        Routine inAltDistr
      LoopTerminator altDistrStim_loop
    LoopTerminator distr_loop
    Routine distrCountBegin
    LoopInitiator chooseDistr_loop loopType="TrialHandler"
      conditionsFile = StimList\distrIndxList.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('distrIndx', 0)]),
        OrderedDict([('distrIndx', 1)]),
        OrderedDict([('distrIndx', 2)]),
        OrderedDict([('distrIndx', 3)]),
        OrderedDict([('distrIndx', 4)]),
        OrderedDict([('distrIndx', 5)]),
        OrderedDict([('distrIndx', 6)]),
        OrderedDict([('distrIndx', 7)]),
        OrderedDict([('distrIndx', 8)]),
        OrderedDict([('distrIndx', 9)]),
        OrderedDict([('distrIndx', 10)]),
        OrderedDict([('distrIndx', 11)]),
        OrderedDict([('distrIndx', 12)]),
        OrderedDict([('distrIndx', 13)]),
        OrderedDict([('distrIndx', 14)]),
        OrderedDict([('distrIndx', 15)]),
        OrderedDict([('distrIndx', 16)]),
        OrderedDict([('distrIndx', 17)]),
        OrderedDict([('distrIndx', 18)]),
        OrderedDict([('distrIndx', 19)]),
        OrderedDict([('distrIndx', 20)]),
        OrderedDict([('distrIndx', 21)]),
        OrderedDict([('distrIndx', 22)]),
        OrderedDict([('distrIndx', 23)])]
      Routine inBothDistr
    LoopTerminator chooseDistr_loop
    Routine listMerge
    LoopInitiator TBR_loop loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine TBRLoopCtrl
      LoopInitiator study_presen loopType="TrialHandler"
        loopType = random
        nReps = stLoopCtrl
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        Routine studyHint
        LoopInitiator study_loop loopType="TrialHandler"
          loopType = random
          nReps = setsize
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          Routine studyTrials
        LoopTerminator study_loop
      LoopTerminator study_presen
      LoopInitiator testHint_presen loopType="TrialHandler"
        loopType = random
        nReps = thLoopCtrl
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        Routine testHint
      LoopTerminator testHint_presen
      LoopInitiator test_loop loopType="TrialHandler"
        conditionsFile = $testLoopNum
        loopType = random
        nReps = testLoopCtrl
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        Routine testTrials
        Routine test_iti
      LoopTerminator test_loop
      Routine TBRcountPlus
      LoopInitiator expCtrl_loop loopType="TrialHandler"
        loopType = random
        nReps = endExpTag
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        Routine expEND
      LoopTerminator expCtrl_loop
    LoopTerminator TBR_loop
    Routine searchHint
    LoopInitiator sch_loop loopType="TrialHandler"
      conditionsFile = StimList\trialIndxList.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('trialIndx', 0), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 1), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 2), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 3), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 4), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 5), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 6), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 7), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 8), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 9), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 10), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 11), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 12), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 13), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 14), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 15), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 16), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 17), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 18), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 19), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 20), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 21), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 22), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 23), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 24), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 25), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 26), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 27), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 28), ('itiDur', 1.6)]),
        OrderedDict([('trialIndx', 29), ('itiDur', 1.6)])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
      Routine searchTrials
    LoopTerminator sch_loop
    Routine schACCpresen
  LoopTerminator blockOrd
  Routine goodbye
